PsychoPy2experiment version="2021.1.4"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = reaction_timetask
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Routines
  Routine trial1
    PolygonComponent polygon_target
      fillColor = red
      nVertices = 100
      shape = regular polygon...
      size = (300, 300)
      startVal [time (s)] = 2.5
      stopVal [duration (s)] = 4
      units = pix
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    KeyboardComponent key_resp_target
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 2.5
      stopVal [duration (s)] = 4
      store = first key
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  Routine Description
    TextComponent text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 6.0
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      text:
        赤い丸印が出たら
        スペースキーを
        押してください
  Routine trial2
    PolygonComponent polygon_3
      fillColor = red
      nVertices = 100
      shape = regular polygon...
      size = (300, 300)
      startVal [time (s)] = 3.5
      stopVal [duration (s)] = 4
      units = pix
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    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 3.5
      stopVal [duration (s)] = 4
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  Routine trial3
    PolygonComponent polygon_5
      fillColor = red
      nVertices = 100
      shape = regular polygon...
      size = (300, 300)
      startVal [time (s)] = 3
      stopVal [duration (s)] = 4
      units = pix
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    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 3
      stopVal [duration (s)] = 4
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  Routine description1
    TextComponent text_2
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      text = 終了です
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Flow
  Routine Description
  LoopInitiator trials loopType="TrialHandler"
    loopType = random
    nReps = 3
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    Routine trial1
    Routine trial2
    Routine trial3
  LoopTerminator trials
  Routine description1
